   requires("1.33s"); 
   dir = getDirectory("Choose a Directory ");
   setBatchMode(true);
   count = 0;
   countFiles(dir);
   n = 0;
   processFiles(dir);
   //print(count+" files processed");
   
 function countFiles(dir) {
      list = getFileList(dir);
      for (i=0; i<list.length; i++) {
          if (endsWith(list[i], "/"))
              countFiles(""+dir+list[i]);
          else
              count++;
      }
  }

   function processFiles(dir) {
      list = getFileList(dir);
      for (i=0; i<list.length; i++) {
          if (endsWith(list[i], "/"))
              processFiles(""+dir+list[i]);
          else {
             showProgress(n++, count);
             path = dir+list[i];
             if(endsWith(dir,"Denoised/")){
             	processFile(path);
          	}
          }
      }
  }

  function processFile(path) {
       if (endsWith(path, ".avi")) {
       	open(path);
       	saveAs("Tiff", path);
           close();
      }
  }
